PsychoPy2experiment version="2021.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2021.2.3
  Window size (pixels) = [2560, 1440]
  color = black
  expName = DRMTaskCopy
  exportHTML = manually
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Routines
  Routine instr
    TextComponent main_instr
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.1
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      text:
        INSTRUCTIONS – FALSE MEMORY DEMO

        There are 10 blocks.
        In each block there are 2 tasks.

        In the first task you will see:
        15 words for you to remember, presented one at a time (no response needed)

        In the second task you will see:
        31 words, presented one at a time.
        Some of these are `old’ words (i.e., they were presented in the first task),
        and some of these are `new’ words (i.e., words you did not see in the first task).
        In this task you respond whether the current word is ‘old’ or ‘new’ 'z' is old; 'm' is new

        Press spacebar when you are ready to start.
    KeyboardComponent dismiss_main_instr
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine exposure
    CodeComponent exposure_code
      Code Type = Auto->JS
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      Begin Routine:
        if Phase == "Exposure":
            thisExp.addData('exposure_duration', exposure_duration)
        if Phase == "Recall":
            continueRoutine = False
    TextComponent exposure_word
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $exposure_duration
      text [set every repeat] = $word
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  Routine recall
    CodeComponent recall_code
      Code Type = Auto->JS
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      Begin Routine:
        if Phase == 'Exposure':
            continueRoutine = False

        if OldNewLure == 'old':
            correct_response = key_for_old
        if OldNewLure == 'new':
            correct_response = key_for_new
        if OldNewLure == 'lure':
            correct_response = key_for_new

        thisExp.addData('key_for_old', key_for_old)
        thisExp.addData('key_for_new', key_for_new)
    TextComponent recall_word
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $word
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    KeyboardComponent recall_response
      allowedKeys = 'z', 'm'
      correctAns = $correct_response
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine set_vars
    CodeComponent set_keys
      Code Type = Auto->JS
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      Begin Experiment:
        win.mouseVisible = False
      Begin Routine:
        exposure_duration = 2
        key_for_old = 'z'
        key_for_new = 'm'
  Routine instr1
    CodeComponent instr1_code
      Code Type = Auto->JS
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      Begin Routine:
        if WhichInstructions != "exposure_instructions":
            continueRoutine = False

        msg_pre_exposure="You will be presented with 15 words, one at a time, for " +\
        str(exposure_duration) +\
        " seconds each." +\
        "\nYour task is to remember the words. Press spacebar to continue."
    TextComponent instr1_text
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg_pre_exposure
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instr2
    CodeComponent instr2_code
      Code Type = Auto->JS
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      Begin Routine:
        if WhichInstructions != "recall_instructions":
            continueRoutine=False

        msg_pre_recall="You will be presented with 31 words, one at a time. "+\
        "\nYour task is to answer whether the current word is 'old' "+\
        "(the word appeared in the previous phase) or 'new' "+\
        "(the word did not appear in the previous phase). "+\
        "\nThe response keys are '" + key_for_old + "' for 'old' and '" + key_for_new + "' for 'new'. "+\
        "\nPress spacebar to continue."
    TextComponent instr2_text
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg_pre_recall
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    KeyboardComponent instr2_dismiss
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine iti
    StaticComponent ISI
      durationEstim = 0.4
      stopVal [duration (s)] = 0.4
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  Routine goodbye
    TextComponent text
      letterHeight = 0.075
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        Thank you for participating

        The experiment will now close itself down
Flow
  Routine set_vars
  Routine instr
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stimulus_definitions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'BlockNumber': 1, 'BlockCategory': 'Beautiful', 'OldNewLure': 'old', 'Item': 1, 'word': 'ugly', 'Phase': 'Exposure', 'WhichInstructions': 'exposure_instructions', 'correct_response': 'z'},
      {'BlockNumber': 1, 'BlockCategory': 'Beautiful', 'OldNewLure': 'old', 'Item': 2, 'word': 'scene', 'Phase': 'Exposure', 'WhichInstructions': 'no_instructions', 'correct_response': 'z'},
      {'BlockNumber': 1, 'BlockCategory': 'Beautiful', 'OldNewLure': 'old', 'Item': 3, 'word': 'gorgeous', 'Phase': 'Exposure', 'WhichInstructions': 'no_instructions', 'correct_response': 'z'},
      {'BlockNumber': 1, 'BlockCategory': 'Beautiful', 'OldNewLure': 'old', 'Item': 4, 'word': 'mountain', 'Phase': 'Exposure', 'WhichInstructions': 'no_instructions', 'correct_response': 'z'},
      {'BlockNumber': 1, 'BlockCategory': 'Beautiful', 'OldNewLure': 'old', 'Item': 5, 'word': 'picture', 'Phase': 'Exposure', 'WhichInstructions': 'no_instructions', 'correct_response': 'z'},
      {'BlockNumber': 1, 'BlockCategory': 'Beautiful', 'OldNewLure': 'old', 'Item': 6, 'word': 'woman', 'Phase': 'Exposure', 'WhichInstructions': 'no_instructions', 'correct_response': 'z'},
      {'BlockNumber': 1, 'BlockCategory': 'Beautiful', 'OldNewLure': 'old', 'Item': 7, 'word': 'snow', 'Phase': 'Exposure', 'WhichInstructions': 'no_instructions', 'correct_response': 'z'},
      {'BlockNumber': 1, 'BlockCategory': 'Beautiful', 'OldNewLure': 'old', 'Item': 8, 'word': 'nice', 'Phase': 'Exposure', 'WhichInstructions': 'no_instructions', 'correct_response': 'z'}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
    Routine instr1
    Routine exposure
    Routine instr2
    Routine recall
    Routine iti
  LoopTerminator trials
  Routine goodbye
